PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Units = pix
  Window size (pixels) = [1920, 1080]
  color = $[-1,-1,-1]
  expName = searchDisc5
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Routines
  Routine trial
    ImageComponent dispStimuli
      image [set every repeat] = $ImageFile
      size [set every repeat] = (2,2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      units = norm
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    KeyboardComponent key_resp_2
      allowedKeys = (1,3)
      correctAns = $correctAnswer
      disabled = True
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      storeCorrect = True
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    cedrusButtonBoxComponent buttonBox_12
      allowedKeys = (1,3)
      correctAns = correctAnswer
      deviceNumber = 0
      discard previous = True
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
      storeCorrect = True
      syncScreenRefresh = True
      useBoxTimer = False
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  Routine break_2
    CodeComponent code
      Code Type = Py
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      Begin Experiment:
        msg='doh'
        trialCounter=0
        accuracySum=0
        totRT=0
      Begin Routine:
        trialCounter = trialCounter + 1

        if buttonBox_12.corr:
            accuracySum = accuracySum + 1
            totRT = totRT + buttonBox_12.rt

        percentAccurate = accuracySum/trialCounter * 100
        percentAccurate = round(percentAccurate, 3)
        meanRT = totRT/trialCounter
        meanRT = round(meanRT, 3)

        msg = "You have completed %i out of 1600 trials. You are %i %% accurate so far, with an average reaction time of %.2f sec. Press RED button to continue." %(trialCounter,percentAccurate,meanRT)
      Each Frame:
        if trialCounter != 320 and trialCounter != 640 and trialCounter !=960 and trialCounter !=1280:
            continueRoutine = False
    TextComponent breakMessage
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg
      units = norm
      wrapWidth = 1.5
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    KeyboardComponent key_resp
      allowedKeys = (2)
      disabled = True
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    cedrusButtonBoxComponent buttonBox_13
      allowedKeys = (0,2)
      deviceNumber = 0
      discard previous = True
      forceEndRoutine = True
      startVal [time (s)] = 2
      store = first key
      storeCorrect = False
      syncScreenRefresh = True
      useBoxTimer = False
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  Routine WelcomeScreen
    TextComponent text
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.5
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      text:
        Welcome to the experimental trials.
        Be reminded that your task is to look for
        a white or a red semicircle.
        If semicircle is facing left press left arrow key.
        If semicircle is facing right press right arrow key.
        Press RED button to continue
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      disabled = True
      forceEndRoutine = True
      startVal [time (s)] = 3
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    cedrusButtonBoxComponent buttonBox_11
      allowedKeys = (0,2)
      deviceNumber = 0
      discard previous = True
      forceEndRoutine = True
      startVal [time (s)] = 1
      store = first key
      storeCorrect = False
      syncScreenRefresh = True
      useBoxTimer = False
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  Routine WelcomePractice
    TextComponent text_2
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.5
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      text:
        Welcome! Your task is to find
        white or red semicircle and indicate
        if it is facing left or right.
        Press RED bar to continue.
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      disabled = True
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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    cedrusButtonBoxComponent buttonBox_6
      allowedKeys = (0,2)
      deviceNumber = 0
      discard previous = True
      forceEndRoutine = True
      startVal [time (s)] = 1
      store = first key
      storeCorrect = False
      syncScreenRefresh = True
      useBoxTimer = False
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  Routine practiceTrials
    ImageComponent image
      flipVert = True
      image [set every repeat] = $ImageFile
      size = (2,2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      units = norm
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    KeyboardComponent key_resp_4
      allowedKeys = 'f','j'
      correctAns = $correctAnswer
      disabled = True
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      storeCorrect = True
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    cedrusButtonBoxComponent buttonBox_10
      allowedKeys = (1,3)
      correctAns = correctAnswer
      deviceNumber = 0
      discard previous = True
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
      storeCorrect = True
      syncScreenRefresh = True
      useBoxTimer = False
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  Routine targetStimuli
    ImageComponent image_2
      image = targets/leftDisc.png
      pos = (-0.02,0.15)
      size = (0.03,0.08)
      startVal [time (s)] = 0.0
      units = norm
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    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      disabled = True
      forceEndRoutine = True
      startVal [time (s)] = 1
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    TextComponent text_3
      letterHeight = 0.08
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.5
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      text:
        Press left arrow if you see left semicircle


        Press right arrow if you see right semicircle


        Press RED button to start
    ImageComponent image_3
      image = targets/rightDisc.png
      pos = (0, -0.15)
      size = (0.03,0.08)
      startVal [time (s)] = 0.0
      units = norm
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    cedrusButtonBoxComponent buttonBox_8
      allowedKeys = (0,2)
      deviceNumber = 0
      discard previous = True
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
      storeCorrect = False
      syncScreenRefresh = True
      useBoxTimer = False
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  Routine targetStimuli2
  Routine practiceFeedback
    CodeComponent code_2
      Code Type = Py
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      Begin Experiment:
        msg='doh'
      Begin Routine:
        if buttonBox_10.corr:
            msg = "Correct!"
        else:
            msg = "Oops, incorrect"
    TextComponent text_4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $msg
      units = norm
      wrapWidth = 1.5
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  Routine instructions
    TextComponent text_5
      letterHeight = 0.07
      startVal [time (s)] = 0
      units = norm
      wrapWidth = 1.5
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      text:
        Look at the fixation cross and press RED button when you
        are ready to start the trial.
        Press left arrow for semicircle facing left.
        Press right arrow for semicircle facing right.
        You will first complete 16 practice trials.
        Press RED bar when you are ready to start.
    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      disabled = True
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    cedrusButtonBoxComponent buttonBox_7
      allowedKeys = (0,2)
      deviceNumber = 0
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 3
      store = first key
      storeCorrect = False
      syncScreenRefresh = False
      useBoxTimer = False
  Routine consent1
    TextComponent text_6
      letterHeight = 0.10
      startVal [time (s)] = 0.0
      text = Please read each statement carefully and click either RED button to Agree and continue or ESC button to disagree and terminate the experiment.
      units = norm
      wrapWidth = 1.5
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    KeyboardComponent key_resp_10
      allowedKeys = 'space'
      disabled = True
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    cedrusButtonBoxComponent buttonBox
      allowedKeys = (0,2)
      deviceNumber = 0
      discard previous = True
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
      storeCorrect = False
      syncScreenRefresh = True
      useBoxTimer = False
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  Routine consent2
    TextComponent text_7
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.5
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      text:
        I understand that my participation in this project will involve looking for a target object on a computer screen and indicating what direction the target is facing, by pressing a computer keyboard buttons. This will require approximately 30min of my time.
        I understand that participation in this study is entirely voluntary and that I can withdraw from the study at any time without providing a reason by simply closing the browser or pressing esc button on your keyboard. I am aware that this will lead to loss of course credit or reimbursement. The incomplete data sets will not be saved.
        I understand that I can discuss any concerns with the experimenters before or after participating.
        This research is carried out by postdoctoral research fellow Dr Anna Nowakowska in the School of Psychology, University of Aberdeen under the supervision of lecturer Anna Hughes and lecturer Alasdair Clarke (Department of Psychology, University of Essex)
        Contact information:
        [a.nowakowska@abdn.ac.uk, anna.hughes@essex.ac.uk, a.clarke@essex.ac.uk]
        Press RED button to Agree and continue.
        Press ESC button to terminate the experiment.
    KeyboardComponent key_resp_11
      allowedKeys = 'space'
      disabled = True
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    cedrusButtonBoxComponent buttonBox_3
      allowedKeys = (0,2)
      deviceNumber = 0
      discard previous = True
      forceEndRoutine = True
      store = first key
      storeCorrect = False
      syncScreenRefresh = True
      useBoxTimer = False
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  Routine consent3
    TextComponent text_8
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.5
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      text:
        I understand that the information provided by me will be held anonymously so that it is impossible to trace this information back to me individually. Information will be held on a secure server and may be retained indefinitely.
        To ensure access to the data for the wider research community, the anonymous dataset may be archived in an online repository (e.g., the Open Science Framework, https://osf.io/) or send to other researchers upon request for inspection.
        Press RED button to Agree and continue.
        Press ESC button to disagree and terminate the experiment.
    KeyboardComponent key_resp_12
      allowedKeys = 'space'
      disabled = True
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    cedrusButtonBoxComponent buttonBox_4
      allowedKeys = (0,2)
      deviceNumber = 0
      discard previous = True
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
      storeCorrect = False
      syncScreenRefresh = True
      useBoxTimer = False
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  Routine consent4
    TextComponent text_9
      letterHeight = 0.10
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.5
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      text:
        I confirm that the purpose, participation information, and data storage of this research have been sufficiently explained.
        I understand that at the end of the experiment I will be provided with additional information about the purpose of this research.
        Press RED button to agree and continue to the experiment.
        Press ESC button to disagree and terminate the experiment.
    KeyboardComponent key_resp_13
      allowedKeys = 'space'
      disabled = True
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    cedrusButtonBoxComponent buttonBox_5
      allowedKeys = (0,2)
      deviceNumber = 0
      discard previous = True
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
      storeCorrect = False
      syncScreenRefresh = True
      useBoxTimer = False
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  Routine fixation2
    PolygonComponent fix_2
      fillColor = $[1,1,1]
      shape = cross
      size = (2.5,2.5)
      startVal [time (s)] = 0.0
      units = cm
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    KeyboardComponent key_resp_14
      allowedKeys = 'space'
      disabled = True
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_11
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      units = norm
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    KeyboardComponent key_resp_16
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine first_fix
    TextComponent text_12
      color = black
      letterHeight = 6
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = la la la
      units = cm
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    PolygonComponent polygon
      fillColor = white
      shape = cross
      size = (2.5, 2.5)
      startVal [time (s)] = 0.0
      units = cm
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    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      disabled = True
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    cedrusButtonBoxComponent buttonBox_9
      allowedKeys = (2,0)
      deviceNumber = 0
      discard previous = True
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
      storeCorrect = False
      syncScreenRefresh = True
      useBoxTimer = False
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  Routine targetInfo
    CodeComponent code_3
      Code Type = Py
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      Begin Experiment:
        message='doh'
        messageFeedback='doh'
        trialsCounterFeedback=0
        target='no colour'
      Begin Routine:
        trialsCounterFeedback= trialsCounterFeedback +1

        if targetType==1:
            target='white'
        else:
            target='red'

        if trials.thisN !=0 and trials.thisN !=320 and trials.thisN !=640 and trials.thisN != 960 and trials.thisN != 1280:
           continueRoutine=False
        messageFeedback="In this block you will be looking for %s semicircle. Press left arrow for semicircle facing left. Press right arrow for semicircle facing right. Press RED button to start."%(target)
    TextComponent targetTypeInstruction
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $messageFeedback
      units = norm
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    cedrusButtonBoxComponent buttonBox_2
      allowedKeys = (0,2)
      deviceNumber = 0
      discard previous = True
      forceEndRoutine = True
      startVal [time (s)] = 2
      store = first key
      storeCorrect = False
      syncScreenRefresh = True
      useBoxTimer = False
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Flow
  Routine consent1
  Routine consent2
  Routine consent3
  Routine consent4
  Routine WelcomePractice
  Routine instructions
  Routine targetStimuli
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = image_stimuli_practice.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'ImageFile': 'Practice arrays/exp1a_trial_0_colour1_distractors1_r.png', 'targ_side': 'r', 'correctAnswer': 3},
      {'ImageFile': 'Practice arrays/exp1a_trial_1_colour1_distractors4_r.png', 'targ_side': 'r', 'correctAnswer': 3},
      {'ImageFile': 'Practice arrays/exp1a_trial_7_colour2_distractors9_r.png', 'targ_side': 'r', 'correctAnswer': 3},
      {'ImageFile': 'Practice arrays/exp1a_trial_8_colour2_distractors19_r.png', 'targ_side': 'r', 'correctAnswer': 3},
      {'ImageFile': 'Practice arrays/exp1a_trial_10_colour3_distractors1_r.png', 'targ_side': 'r', 'correctAnswer': 3},
      {'ImageFile': 'Practice arrays/exp1a_trial_12_colour3_distractors9_r.png', 'targ_side': 'r', 'correctAnswer': 3},
      {'ImageFile': 'Practice arrays/exp1a_trial_14_colour3_distractors31_r.png', 'targ_side': 'r', 'correctAnswer': 3},
      {'ImageFile': 'Practice arrays/exp1a_trial_17_colour1_distractors9_l.png', 'targ_side': 'l', 'correctAnswer': 1},
      {'ImageFile': 'Practice arrays/exp1a_trial_18_colour1_distractors19_l.png', 'targ_side': 'l', 'correctAnswer': 1},
      {'ImageFile': 'Practice arrays/exp1a_trial_21_colour2_distractors4_l.png', 'targ_side': 'l', 'correctAnswer': 1},
      {'ImageFile': 'Practice arrays/exp1a_trial_23_colour2_distractors19_l.png', 'targ_side': 'l', 'correctAnswer': 1},
      {'ImageFile': 'Practice arrays/exp1a_trial_25_colour3_distractors1_l.png', 'targ_side': 'l', 'correctAnswer': 1},
      {'ImageFile': 'Practice arrays/exp1a_trial_27_colour3_distractors9_l.png', 'targ_side': 'l', 'correctAnswer': 1}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
    Routine first_fix
    Routine practiceTrials
    Routine practiceFeedback
  LoopTerminator trials_2
  Routine WelcomeScreen
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $'orders/list_sub_'+str(int(expInfo['participant']))+'.xlsx'
    loopType = sequential
    nReps = 1
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    Routine targetInfo
    Routine first_fix
    Routine trial
    Routine break_2
  LoopTerminator trials
